PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = image_shower
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $randomDuration
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 1
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        import csv
        import random
        IMAGE_ORDER = []

        # read csv
        with open("images.csv") as f:
            reader = csv.reader(f)
            next(reader, None) # skip header
            for row in reader:
                image_path = row[2]
                IMAGE_ORDER.append(image_path)

        print(IMAGE_ORDER[0])
        random.shuffle(IMAGE_ORDER)
        print(IMAGE_ORDER[0])
      Begin JS Experiment:
        // Array to store image paths
        IMAGE_ORDER = [
            "image/Baby 1.jpg",
            "image/Baby 2.jpg",
            "image/Baby 3.jpg",
        ];

        shuffleArray(IMAGE_ORDER)



        // Function to shuffle an array (Fisher-Yates Shuffle Algorithm)
        function shuffleArray(array) {
          for (let i = array.length - 1; i > 0; i--) {
            const j = Math.floor(Math.random() * (i + 1));
            [array[i], array[j]] = [array[j], array[i]]; // Swap elements
          }
        }
      Begin JS Routine:
        random_duration = 2 + Math.floor(Math.random() * 8)

        image_path = IMAGE_ORDER[loops.thisN]
        print(image_path)
        image.Image = image_path
  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = c
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 0:
            text.text = "Welcome! (1)"
        elif trials.thisN == 1:
            text.text = "Welcome! (2)"
  Routine wait
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  Routine break_2
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    TextComponent text_countdown
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 1
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        task_timer = core.CountdownTimer(start = 5)
      Each Frame:
        # end task after 5 secs
        time_left = task_timer.getTime()
        minutes = int(time_left/60)
        seconds = int(time_left - minutes * 60)

        text_countdown.text = seconds
        if time_left <= 0.0:
            continueRoutine = False
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine welcome
    LoopInitiator loops loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine wait
    LoopTerminator loops
    Routine break_2
  LoopTerminator trials
